graphs:
  - nodes:
      - id: input
        module: timeflux_audio.nodes.device
        class: Input
        # params:
        #   device: 1
      - id: notch
        module: timeflux_dsp.nodes.filters
        class: IIRFilter
        params:
          filter_type: bandstop
          frequencies: [45, 55]
          order: 2
      - id: bandpass
        module: timeflux_dsp.nodes.filters
        class: IIRFilter
        params:
          filter_type: bandpass
          frequencies: [20, 100]
          order: 2
      - id: ui
        module: timeflux_ui.nodes.ui
        class: UI
        params:
          settings:
            monitor:
              lineWidth: 1
      - id: output
        module: timeflux_audio.nodes.device
        class: Output
        params:
          amplitude: 1 # be careful with that setting as high values can damage your audio interface!
        #   device: 4
    edges:
      - source: input
        target: notch
      - source: notch
        target: bandpass
      - source: bandpass
        target: ui:audio
      - source: bandpass
        target: output
    rate: 10

